PsychoPy2experiment version="1.73.06"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine smileyface
    PatchComponent patch_5
      opacity [set every repeat] = $FB
      stopVal [duration (s)] = 2
      pos = [0, 0.75]
      sf = None
      startVal [time (s)] = 0.0
      image [set every repeat] = $image
      size = [0.25, 0.25]
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    CodeComponent code_2
      Begin Experiment:
        patch_3=visual.PatchStim(win=win, name='patch_3',
            tex=u'images/smiley_face.jpg', mask=None,
            ori=0, pos=[0, -0.75], size=[0.25, 0.25], sf=None, phase=0.0,
            color=[1,1,1], colorSpace=u'rgb', opacity=1,
            texRes=128, interpolate=False, depth=0.0)

        patch_4=visual.PatchStim(win=win, name='patch_4',
            tex=u'images/flat_face.jpg', mask=None,
            ori=0, pos=[0, -0.75], size=[0.25, 0.25], sf=None, phase=0.0,
            color=[1,1,1], colorSpace=u'rgb', opacity=1,
            texRes=128, interpolate=False, depth=0.0)

        text_5=visual.TextStim(win=win, ori=0, name='text_5',
            text=u'Rest',
            font=u'Arial',
            pos=[0, 0], height=0.1,wrapWidth=None,
            color=u'white', colorSpace=u'rgb', opacity=1.0,
            depth=-2.0)
      Each Frame:
        if (fb>th and image=='up.jpg' and FB) or (fb<th and image == 'down.jpg' and FB):
            patch_3.draw()

        elif (fb<th and image=='up.jpg' and FB) or (fb>th and image == 'down.jpg' and FB):
            patch_4.draw()

        t = ThermBase(win, [0.25,1],[-0.125,-0.5])
        if FB:
            t.plot(fb,th,image.split('.')[0],frameN)
            t.draw()
        else:
            text_5.draw()
      Begin Routine:
        rtdata = rt.check(image.split('.')[0])[0]
        fb = np.mean(rtdata[_window:])
      End Routine:
        rt.check(image.split('.')[0]+'_smile_fb')
  Routine end
    TextComponent text_5_end
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Good Job!

        Get ready for the next run!
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent text_6
      text [set every repeat] = $run_num
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_5
      Begin Routine:
        rt.save(filename[:-5]+'_run_%d'%run_num+'.npz')
        rt.close()
  Routine feedback
    PatchComponent patch_2
      opacity [set every repeat] = 1
      stopVal [duration (s)] = 2
      pos = [0, 0.75]
      sf = None
      startVal [time (s)] = 0.0
      image [set every repeat] = $image
      size = [0.25, 0.25]
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    CodeComponent code
      Begin Experiment:
        def extract(rt,dr):
            print "dr: ", dr
            trials = np.asarray(rt.trial_type)
            data = np.asarray(rt.data)
            print "data, trials", data, trials
            if (trials==dr).any():
                return data[trials==dr].tolist()
            else:
                return []
      Each Frame:
        t = ThermBase(win, [0.25,1],[-0.125,-0.5])
        if FB:
            t.plot(fb,th,image.split('.')[0],frameN)
        t.draw()
      Begin Routine:
        rtdata = rt.check(image.split('.')[0])[0]
        fb = np.mean(rtdata[_window:])
        dr = image.split('.')[0]

        if dr=='down' and FB:
            th = np.mean((downs+extract(rt,dr))[_target_window:])
        elif dr == 'up' and FB:
            th = np.mean((ups+extract(rt,dr))[_target_window:])
      End Routine:
        rt.check(image.split('.')[0]+'_fb')
  Routine stimulus
    PatchComponent patch
      stopVal [duration (s)] = 14.0
      pos = [0, 0.75]
      sf = None
      startVal [time (s)] = 0.0
      image [set every repeat] = $image
      size = [0.25, 0.25]
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    CodeComponent code_4
      End Routine:
        rt.check(image.split('.')[0])
  Routine rest
    TextComponent text_2
      text [set every repeat] = Rest
      stopVal [duration (s)] = 6.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    TextComponent Intro
      text = These are instructions that will tell you what to do.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space','1','2'
      startVal [time (s)] = 0.0
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  Routine trigger
    TextComponent text
      text = Waiting for scanner trigger ...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5_nothing
      opacity = 0
      text [set every repeat] = $FB
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine question_maybe
    TextComponent text_4
      text [set every repeat] = $q_or_r
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_6
      Begin Experiment:
        rating=visual.RatingScale(win=win, name='rating', escapeKeys=['escape'], displaySizeFactor=1.00,
            pos=[0.0, -0.4], markerStart=4, leftKeys='1', rightKeys='2', scale='ratingscale')
      Each Frame:
        if not q_or_r =='Rest':
            rating.draw()
            if rating.noResponse == False:
                rating.status = FINISHED
                rating.response = rating.getRating()
                rating.rt = rating.getRT()
      Begin Routine:
        rating.reset()
        rating.status = NOT_STARTED
      End Routine:
        if q_or_r=='Rest':
            rt.check('rest')
        else:
            rt.check(q_or_r)
      End Experiment:
        trials.addData('rating.rt', rating.getRT())
  Routine baseline
    TextComponent text_3
      text = Rest
      stopVal [duration (s)] = 30
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_3
      Begin Experiment:
        from scripts.feedback import ThermBase
        from scripts.xmlparse import RT
        import numpy as np
        rt = RT()
      Begin Routine:
        print rt.trial_type
        if run_num==1:
            th = 0
        else:
            foo = np.load(filename[:-5]+'_run_%d'%(run_num-1)+'.npz')
            ups = (foo["data"][foo["trials"]=='up']).tolist()
            downs = (foo["data"][foo["trials"]=='down']).tolist()
        _window = -4
        _target_window = -4
        FB=bool(FB)
      End Routine:
        rt.check('baseline')
Flow
  Routine trial
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = conditions/mTBI_runs.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'run_file': u'mTBIconditions2.xlsx', u'FB': 1, u'run_num': 2},
      {u'run_file': u'mTBIconditions3.xlsx', u'FB': 1, u'run_num': 3},
      {u'run_file': u'mTBIconditions4.xlsx', u'FB': 1, u'run_num': 4},
      {u'run_file': u'mTBIconditions5.xlsx', u'FB': 1, u'run_num': 5},
      {u'run_file': u'mTBIconditions6.xlsx', u'FB': 0, u'run_num': 6}]
    Routine trigger
    Routine baseline
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $run_file
      loopType = sequential
      nReps = 1
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      LoopInitiator trials_2 loopType="TrialHandler"
        loopType = random
        nReps = 1
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        Routine stimulus
        Routine feedback
      LoopTerminator trials_2
      Routine stimulus
      Routine question_maybe
      Routine smileyface
      Routine rest
    LoopTerminator trials
    Routine end
  LoopTerminator trials_3
